PsychoPy2experiment version="2021.2.1"
Settings
  Data filename = u'archive/%s_%s_%s' % (expInfo['id'], expName, expInfo['date'])
  Experiment info = {'id': '', 'experimenter': '', 'task': "['1back', '2back']", 'phase': "['prac', 'real']", 'eeg_record': "['yes', 'no']", 'show_control_monitor': "['yes', 'no']"}
  Full-screen window = True
  Monitor = RoseLab
  Screen = 1
  Units = degFlat
  Window size (pixels) = [1920, 1080]
  color = $[0.0,0.0,0.0]
  expName = sof_1back_task
  logging level = debug
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Routines
  Routine trial
    CodeComponent trial_timing_params
      Code Type = Py
      Begin Routine:
        # Randomly select a trial jitter
        shuffle(jitters)
        this_jitter = round(jitters[0])

        # Add to the trialHandler object
        trials.addData(u'jitter', this_jitter)
    CodeComponent send_eeg_trigger
      Code Type = Py
      Begin Routine:
        # Reset the trigger
        if eeg_record:
            eeg_trig_box.write(reset_bit)

        # At start of the trial, indicate I have not snt a trigger
        stim_trigger_sent = False
        stim_trigger_frame = 0

        # Determine trigger value
        this_marker_code = stim_marker[expInfo['task']][category][presentation]
      Each Frame:
        # Send trigger if needed
        if eeg_record:
            if stim_image.status == STARTED:
                if not stim_trigger_sent:
                    win.callOnFlip(eeg_trig_box.write, this_marker_code)
                    stim_trigger_sent = True
                    stim_trigger_frame = frameN

            # Reset the trigger at the next flip
            if stim_trigger_sent and frameN == stim_trigger_frame + 1:
                win.callOnFlip(eeg_trig_box.write, reset_bit)
    ImageComponent stim_image
      durationEstim = .5
      image [set every repeat] = $image_file
      size = (12.0, 12.0)
      startEstim = .25
      startVal [frame N] = trial_start_isi_duration
      stopVal [duration (frames)] = image_duration
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    PolygonComponent photosensor_dot
      durationEstim = .5
      fillColor = $[1,1,1]
      nVertices = 180
      pos = (-24.0, 0.0)
      shape = regular polygon...
      size = (0.75,0.75)
      startEstim = .25
      startVal [frame N] = trial_start_isi_duration
      stopVal [duration (frames)] = image_duration
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    TextComponent trial_red_fixation
      color = red
      durationEstim = 2.75
      letterHeight = 1
      startEstim = 0
      startVal [frame N] = 0
      stopVal [duration (frames)] = trial_start_isi_duration + image_duration + this_jitter
      text = +
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    KeyboardComponent response
      allowedKeys = 'f', 'j'
      durationEstim = 2.5
      forceEndRoutine = False
      startEstim = .25
      startVal [frame N] = trial_start_isi_duration 
      stopVal [duration (frames)] = image_duration + this_jitter
      store = first key
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    CodeComponent send_resp_trigger_and_code
      Code Type = Py
      Begin Routine:
        # State I have not sent a response trigger yet, and initialize response.keys
        resp_trigger_sent = False
        resp_marker_frame = 0

        # Response markers are outlined in the config routine.
      Each Frame:
        # Send response trigger
        if eeg_record:
            if len(response.keys) == 1:

                # Code the response
                this_key = response.keys
                this_rt  = response.rt
                if presentation == 2:
                    is_resp_cor = 1
                    resp_type = 'correct'
                else:
                    is_resp_cor = 0
                    resp_type = 'incorrect'

                # Send the marker
                if not resp_trigger_sent and expInfo['phase'] == 'real':
                    # Make call to send trigger
                    win.callOnFlip(eeg_trig_box.write, resp_marker[resp_type])
                    resp_trigger_sent = True
                    resp_marker_frame = frameN
                    trials.addData(u'resp_trigger_frame', resp_marker_frame)

            # Reset the trigger at the next flip
            if resp_trigger_sent and frameN == resp_marker_frame + 5:
                win.callOnFlip(eeg_trig_box.write, reset_bit)
      End Routine:
        # Log and store data
        if not response.keys: # Update things I need to
            this_key = 'n/a'
            this_rt = -99
            resp_trigger_frame = -99
            if presentation == 1:
                is_resp_cor = 1
            else:
                is_resp_cor = 0

        # Add data to trialHandler
        trials.addData(u'resp', this_key)
        trials.addData(u'rt', this_rt)
        trials.addData(u'correct', is_resp_cor)
        if eeg_record:
            trials.addData(u'stim_trigger_frame', stim_trigger_frame)
            trials.addData(u'resp_trigger_frame', resp_trigger_frame)
  Routine delay
    CodeComponent delay_control_monitor
      Code Type = Py
      Begin Routine:
        # Determine if delay is needed
        if draw_delay:
            continueRoutine = True
        else:
            continueRoutine = False

        if eeg_record and show_control:
            control_text.setText('Task')
            control_text.draw()
            win2.flip()
    TextComponent delay_red_fix
      color = $[1.000,-1.000,-1.000]
      durationEstim = 20
      letterHeight = 1.0
      startEstim = 0
      startVal [frame N] = 0
      stopVal [duration (frames)] = delay_duration
      text = +
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  Routine instructions
    CodeComponent instructions_control_monitor
      Code Type = Py
      Begin Routine:
        # Display on control monitor if needed
        if show_control:
            control_text.setText('Instructions')
            control_text.draw()
            win2.flip()
    TextComponent instructions_text
      letterHeight = 1
      pos = (0, .5)
      startVal [time (s)] = 0.0
      wrapWidth = 220
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      text:
        INSTRUCTIONS
    ImageComponent instruction_image
      disabled = True
      image = $instruction_image_file
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent instruction_wait
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine save_trials
    CodeComponent save_trial_handler
      Code Type = Py
      Begin Routine:
        # Make the save file name (This should have accurate id as it is reading from it)
        save_file_name = f"sub-{expInfo['id']}_task-{expInfo['task']}_run-{expInfo['phase']}_beh"
        save_pickle = save_dir /  save_file_name
        save_tsv = save_dir / (save_file_name + '.tsv')
        save_csv = save_dir / (save_file_name + '.csv')

        # Save it many different ways
        trials.saveAsWideText(save_tsv)
        trials.saveAsWideText(save_csv)
        trials.saveAsPickle(save_pickle)
    TextComponent final_red_fix
      color = $[1.000,-1.000,-1.000]
      durationEstim = 20
      letterHeight = 1
      startEstim = 0
      startVal [frame N] = 0
      stopVal [duration (frames)] = delay_duration
      text = +
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  Routine task_complete
    CodeComponent task_complete_control_monitor
      Code Type = Py
      Begin Routine:
        if eeg_record and show_control:
            control_text.setText('TASK COMPLETE')
            control_text.draw()
            win2.flip()
    CodeComponent save_experiment_handler
      Code Type = Py
      Begin Routine:
        # Resave experiment handler just in case
        # This is copied from code generated by PsychoPy Builder
        thisExp.saveAsPickle(filename)
        thisExp.saveAsWideText(filename + '.csv')
        thisExp.saveAsWideText(filename + '.tsv')
    TextComponent task_complete_text
      letterHeight = 1.0
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = This task is now complete.
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  Routine task_break
    CodeComponent task_break_code
      Code Type = Py
      Begin Routine:
        # Define the break display text
        break_string = 'Take a break'

        # Determine if a break is needed
        if trials.thisN == 0:
            continueRoutine = False
            draw_delay = True
        elif trials.thisN % task_break_n != 0:
            continueRoutine = False
            draw_delay = False
        else:
            continueRoutine = True
            draw_delay = True

        # Show control monitor if needed
        if eeg_record and continueRoutine and show_control:
            control_text.setText('Break')
            control_text.draw()
            win2.flip()
      Each Frame:
        if break_resp.status == STARTED:
            break_string = 'Take a break /n/n Let the experimenter know when you are ready'
    TextComponent break_text1
      letterHeight = 1
      startVal [time (s)] = 0
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      text [set every repeat]:
        Take a break
    TextComponent break_text2
      letterHeight = 1
      startVal [time (s)] = 30
      wrapWidth = 120
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      text:
        Let the experimenter know when you are ready to continue.
    KeyboardComponent break_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 30
      store = nothing
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  Routine config
    CodeComponent configure_options
      Code Type = Py
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      Begin Experiment:
        ## Import some useful libraries
        from pathlib import Path
        from random import shuffle
        import pandas as pd
        import numpy as np

        ## TASK PARAMETERS
        # Number of 1-back and 2-back trials per category/subcategory per block
        # There are 6 categories (manmade-natural scenes and objects, male-female faces)
        # This results n_repeats total equalling n_repeat_per_cat_block * n_blocks
        # With values of 8 and 3, respectively, this is a total of 48 repeats per
        # superordinate image category (objects, scenes, and faces).
        n_repeat_per_cat_block = 8

        # Number of blocks (auto computes breaks from this and ensures equal # of repeats per block)
        n_blocks = 3

        # Define number of trials between rests
        # With the way it is coded, there are an equal number of
        # repeats for each category X sub-category cell. No repeats
        # occur across rests (only within rests).
        task_break_n = 108

        ## TIMING OPTIONS
        # Timing Variables (all are in seconds)
        # These are converted to frames in the Begin Routine tab (changed in place)
        image_duration = .5 # Length the word is on the screen
        trial_start_isi_duration = .25 # Time to load image. Subtracted from min_jitter and max_jitter to make the list. For loading stimulus
        delay_duration = 5.0 # Time padding beginning and end of a trial segment.
        jitter_spacing = frameDur # Intervals between jitter possibilities, same as frameDur
        min_jitter = 1.75 # Minimum jitter duration
        max_jitter = 2.25 # Maximum jitter duration

        # Make jitters list
        jitters = np.arange(min_jitter - trial_start_isi_duration,
                            max_jitter + frameDur - trial_start_isi_duration,
                            frameDur)

        ## EEG SETUP TRIGGER OPTIONS
        eeg_com = 'COM5' # Can check the Device Manager in windows to figure this out (COM Ports).
        reset_bit = [0] # Don't change this unless you know what you are doing

        # Stimulus markers
        stim_marker = {
            '1back': {
                'scenes': {1: [11], 2: [12]},
                'objects': {1: [21], 2: [22]},
                'faces': {1: [31], 2: [32]}
                },
             '2back': {
                'scenes': {1: [13], 2: [14]},
                'objects': {1: [23], 2: [24]},
                'faces': {1: [33], 2: [34]}
                }
        }

        # Response markers
        # This is the code for whether a response is given.
        # The codes are 51 for correct response to repeat
        # 52 for incorrect response to first presentation trial
        resp_marker = {
            'correct': [51],
            'incorrect': [52]
        }
      Begin Routine:
        # Note that frameDur is the duration of a single frame estimated
        # by psychopy. If it fails to detect in (e.g., frameRate == Null),
        # this typically defaults to 60.0 Hz. Note that this timing scheme
        # allows for reproducibility across systems (monitors, computers, etc.)

        # THE FOLLOWING SHOULD NOT BE CHANGED (minus variable names)

        # Critical timing pieces
        image_duration = round(image_duration / frameDur)
        trial_start_isi_duration = round(trial_start_isi_duration / frameDur)
        delay_duration = round(delay_duration / frameDur)
        jitters = np.round(jitters / frameDur)
  Routine setup
    CodeComponent frame_rate_optimization
      Code Type = Py
      Begin Experiment:
        ## FRAM RATE OPTIMIZATION OPTIONS
        processPriority = 'realtime' # Can be 'normal', 'high', 'realtime'
        disableGC = True # disable garbage collection

        # Import garbage collection module
        import gc

        # Handle Priority stuff
        if processPriority == 'normal':
            pass
        elif processPriority == 'high':
            core.rush(True)
        elif processPriority == 'realtime':
            # Only makes a diff compared to 'high' on Windows.
            core.rush(True, realtime=True)
        else:
            raise Exception('Invalid process priority:', processPriority, "Process running at normal.")

        # Handle Garbage Collection
        if disableGC:
            gc.disable()
    CodeComponent info_gui_code
      Code Type = Py
      Begin Experiment:
        # Define eeg_record
        # If eeg_record == 'no', will not send triggers to output.
        if expInfo['eeg_record'] == 'yes' and expInfo['phase'] == 'real':
            eeg_record = True
        else:
            eeg_record = False

        # If eeg_record == 'no', will not send triggers to output.
        # May not need the control_monitor in Roselab
        if expInfo['show_control_monitor'] == 'yes':
            show_control = True
        else:
            show_control = False

        # Check if frameRate can be determined, if not, exit out
        frameRate = expInfo['frameRate']
        if frameRate == None:
            print('frame rate not established. Try Again.')
            win.close()
            core.quit()

        # Verify everything
        if show_control:
            dlg = gui.DlgFromDict(dictionary=expInfo, title='Is this information correct?')
            if dlg.OK == False:
                win.close()
                core.quit()  # user pressed cancel
    CodeComponent control_monitor_code
      Code Type = Py
      Begin Experiment:
        # Setup window 2 only if asked too
        if show_control:

            win2 = visual.Window(
                size=[1920,1080], fullscr=True, screen=1,
                allowGUI=False, allowStencil=False,
                color=[-1.0,-1.0,-1.0], colorSpace='rgb',
                blendMode='avg', useFBO=True,
                units='pix')

            control_text = visual.TextStim(win=win2,
                text='default text',
                font='Helvetica',
                pos=(0, 0), height=1.5, wrapWidth=200, ori=0,
                color='white', colorSpace='rgb', opacity=1,
                depth=-1.0);
      End Experiment:
        # Close the control room monitor
        if show_control and eeg_record:
            win2.close()
    CodeComponent data_save_setup
      Code Type = Py
      Begin Experiment:
        # Setup save directorya
        save_dir = Path('data') / f"sub-{expInfo['id']}"
        save_dir.mkdir(exist_ok=True, parents=True)
    CodeComponent eeg_trigger_setup
      Code Type = Py
      Begin Experiment:
        if eeg_record:

            # Import library
            import serial

            # Setup box
            eeg_trig_box = serial.Serial(eeg_com)
            eeg_trig_box.write(reset_bit)
      End Experiment:
        # Return bits to low state, then close connection
        if eeg_record:
            eeg_trig_box.write(reset_bit)
            eeg_trig_box.close()
    CodeComponent make_stim_list
      Code Type = Py
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      Begin Routine:
        # Handle directories
        stim_dir = Path('stim_lists')
        stim_dir.mkdir(exist_ok=True, parents=True)

        # Check if the file exists. If it iexists, don't overwrite
        back1_file = stim_dir / f"sub-{expInfo['id']}_task-1back_crit.csv"
        back2_file = stim_dir / f"sub-{expInfo['id']}_task-2back_crit.csv"
        if (not back1_file.is_file() or not back2_file.is_file()) and expInfo['phase'] == 'real':

            # Load the the stimulus files
            faces_f = pd.read_csv('sof_faces_female.csv').sample(frac=1)
            faces_m = pd.read_csv('sof_faces_male.csv').sample(frac=1)
            objects_m = pd.read_csv('sof_objects_man.csv').sample(frac=1)
            objects_n = pd.read_csv('sof_objects_nat.csv').sample(frac=1)
            scenes_m = pd.read_csv('sof_scenes_man.csv').sample(frac=1)
            scenes_n = pd.read_csv('sof_scenes_nat.csv').sample(frac=1)

            # Make 1-back and 2-back data frames (split each in half)
            faces_m_1b, faces_m_2b = np.array_split(faces_m, 2)
            faces_f_1b, faces_f_2b = np.array_split(faces_f, 2)
            objects_m_1b, objects_m_2b = np.array_split(objects_m, 2)
            objects_n_1b, objects_n_2b = np.array_split(objects_n, 2)
            scenes_m_1b, scenes_m_2b = np.array_split(scenes_m, 2)
            scenes_n_1b, scenes_n_2b = np.array_split(scenes_n, 2)

            ### 1-BACK TASK STIMULI
            # Make list of lists
            faces_m_1b_list = np.array_split(faces_m_1b, n_blocks)
            faces_f_1b_list = np.array_split(faces_f_1b, n_blocks)
            objects_m_1b_list = np.array_split(objects_m_1b, n_blocks)
            objects_n_1b_list = np.array_split(objects_n_1b, n_blocks)
            scenes_m_1b_list = np.array_split(scenes_m_1b, n_blocks)
            scenes_n_1b_list = np.array_split(scenes_n_1b, n_blocks)

            # Make 1-back critical list
            back1_blocks_list = []
            for i in np.arange(n_blocks):

                # Get temporary lists
                tmp_faces_f = faces_f_1b_list[i].reset_index(drop=True)
                tmp_faces_m = faces_m_1b_list[i].reset_index(drop=True)
                tmp_objects_m = objects_m_1b_list[i].reset_index(drop=True)
                tmp_objects_n = objects_n_1b_list[i].reset_index(drop=True)
                tmp_scenes_m = scenes_m_1b_list[i].reset_index(drop=True)
                tmp_scenes_n = scenes_n_1b_list[i].reset_index(drop=True)

                # Add repeat column and randomly assign repeat trials
                tmp_faces_f['repeat'] = 0
                tmp_faces_f.at[tmp_faces_f.sample(n=n_repeat_per_cat_block).index, 'repeat'] = 1
                tmp_faces_m['repeat'] = 0
                tmp_faces_m.at[tmp_faces_m.sample(n=n_repeat_per_cat_block).index, 'repeat'] = 1
                tmp_objects_m['repeat'] = 0
                tmp_objects_m.at[tmp_objects_m.sample(n=n_repeat_per_cat_block).index, 'repeat'] = 1
                tmp_objects_n['repeat'] = 0
                tmp_objects_n.at[tmp_objects_n.sample(n=n_repeat_per_cat_block).index, 'repeat'] = 1
                tmp_scenes_m['repeat'] = 0
                tmp_scenes_m.at[tmp_scenes_m.sample(n=n_repeat_per_cat_block).index, 'repeat'] = 1
                tmp_scenes_n['repeat'] = 0
                tmp_scenes_n.at[tmp_scenes_n.sample(n=n_repeat_per_cat_block).index, 'repeat'] = 1

                # Combine the stimulus list
                tmp_stim_list = [tmp_faces_f, tmp_faces_m, tmp_objects_m, tmp_objects_n,
                                 tmp_scenes_m, tmp_scenes_n]
                tmp_block = pd.concat(tmp_stim_list).sample(frac=1)
                tmp_block['task'] = '1back'
                tmp_block['block'] = i + 1
                tmp_block['presentation'] = 1

                # Make a pandas dataframe with no rows
                out_list = pd.DataFrame(columns=tmp_block.columns)

                # Loop through the rows to build out_list
                for ri, row in tmp_block.iterrows():

                    # Append current row to
                    out_list = out_list.append(row)

                    # Determine if repeat is needed
                    if row['repeat'] == 1:
                        row['presentation'] = 2
                        out_list = out_list.append(row)
                out_list.reset_index(drop=True, inplace=True)
                back1_blocks_list.append(out_list)

            # Make and save the stim list
            pd.concat(back1_blocks_list).to_csv(back1_file, index=False)

            ### 2-BACK TASK STIMULI
            # Make list of lists
            faces_m_2b_list = np.array_split(faces_m_2b, n_blocks)
            faces_f_2b_list = np.array_split(faces_f_2b, n_blocks)
            objects_m_2b_list = np.array_split(objects_m_2b, n_blocks)
            objects_n_2b_list = np.array_split(objects_n_2b, n_blocks)
            scenes_m_2b_list = np.array_split(scenes_m_2b, n_blocks)
            scenes_n_2b_list = np.array_split(scenes_n_2b, n_blocks)

            # Make 2-back critical list
            back2_blocks_list = []
            for i in np.arange(n_blocks):

                # Get temporary lists
                tmp_faces_f = faces_f_2b_list[i].reset_index(drop=True)
                tmp_faces_m = faces_m_2b_list[i].reset_index(drop=True)
                tmp_objects_m = objects_m_2b_list[i].reset_index(drop=True)
                tmp_objects_n = objects_n_2b_list[i].reset_index(drop=True)
                tmp_scenes_m = scenes_m_2b_list[i].reset_index(drop=True)
                tmp_scenes_n = scenes_n_2b_list[i].reset_index(drop=True)

                # Add repeat column and randomly assign repeat trials
                tmp_faces_f['repeat'] = 0
                tmp_faces_f.at[tmp_faces_f.sample(n=n_repeat_per_cat_block).index, 'repeat'] = 1
                tmp_faces_m['repeat'] = 0
                tmp_faces_m.at[tmp_faces_m.sample(n=n_repeat_per_cat_block).index, 'repeat'] = 1
                tmp_objects_m['repeat'] = 0
                tmp_objects_m.at[tmp_objects_m.sample(n=n_repeat_per_cat_block).index, 'repeat'] = 1
                tmp_objects_n['repeat'] = 0
                tmp_objects_n.at[tmp_objects_n.sample(n=n_repeat_per_cat_block).index, 'repeat'] = 1
                tmp_scenes_m['repeat'] = 0
                tmp_scenes_m.at[tmp_scenes_m.sample(n=n_repeat_per_cat_block).index, 'repeat'] = 1
                tmp_scenes_n['repeat'] = 0
                tmp_scenes_n.at[tmp_scenes_n.sample(n=n_repeat_per_cat_block).index, 'repeat'] = 1

                # Combine the stimulus list
                tmp_stim_list = [tmp_faces_f, tmp_faces_m, tmp_objects_m, tmp_objects_n,
                                 tmp_scenes_m, tmp_scenes_n]
                while True:
                    tmp_block = pd.concat(tmp_stim_list).sample(frac=1)
                    if tmp_block.iloc[-1]['repeat'] != 1:
                        break
                tmp_block['task'] = '2back'
                tmp_block['block'] = i + 1
                tmp_block['presentation'] = 1

                # Make a pandas dataframe with no rows
                out_list = pd.DataFrame(columns=tmp_block.columns)

                # This works only in a while loop
                ri = 0
                while True:

                    # Break while loop if needed
                    if ri == tmp_block.shape[0]:
                        break

                    # Get the current row
                    row = tmp_block.iloc[ri]

                    # Append current row to
                    out_list = out_list.append(row)
                    ri += 1

                    # Determine if repeat is needed
                    if row['repeat'] == 1:
                        row.at['presentation'] = 2
                        next_row = tmp_block.iloc[ri]
                        out_list = out_list.append(next_row)
                        out_list = out_list.append(row)
                        ri += 1
                        if next_row['repeat'] == 1:
                            next_row.at['presentation'] = 2
                            out_list = out_list.append(next_row)
                out_list.reset_index(drop=True, inplace=True)
                back2_blocks_list.append(out_list)

            # Make and save the stim list
            pd.concat(back2_blocks_list).to_csv(back2_file, index=False)
    CodeComponent select_stim_list_code
      Code Type = Py
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      Begin Routine:
        if expInfo['task'] == '1back':
            this_instruction_img = '1back_instructions.jpg'
            if expInfo['phase'] == 'real':
                this_stim_file = str(back1_file)
            else:
                this_stim_file = '1back_prac.csv'
        else:
            this_instruction_img = '2back_instructions.jpg'
            if expInfo['phase'] == 'real':
                this_stim_file = str(back2_file)
            else:
                this_stim_file = '2back_prac.csv'
Flow
  Routine config
  Routine setup
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = $this_stim_file
    loopType = sequential
    nReps = 1
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    Routine task_break
    Routine delay
    Routine trial
  LoopTerminator trials
  Routine save_trials
  Routine task_complete
